PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = subitizing
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Routines
  Routine trial
    CodeComponent generateDots
      Code Type = Auto->JS
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      Begin Routine:
        import psychopy.visual, psychopy.core
        import random

        win.flip()
        core.wait(1)

        circles = []
        circleCoords = []
        for i in range(dotCount):
            xPos = random.uniform(-0.25, 0.25)
            yPos = random.uniform(-0.25, 0.25)
            circles.append(psychopy.visual.Circle(
                win = win,
                lineWidth = 0,
                opacity = 1,
                radius = 0.01,
                fillColor = 'black',
                pos = (xPos, yPos)
            ))
            circleCoords.append((xPos, yPos))

        thisExp.addData('circleCoords', circleCoords)
      Each Frame:
        for circle in circles:
            circle.draw()
    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = $duration
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  Routine response
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      text = Hány pontot látott?
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    KeyboardComponent resp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      correctAns = $dotCount
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      storeCorrect = True
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  Routine instructions
    TextComponent welcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
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      text:
        Üdvözöljük!

        A következő kísérletben pontokat fog látni a képernyőn. Az lesz a feladata, hogy a lehető legnagyobb pontossággal igyekezzen meghatározni, hogy hány pontot látott. Válaszát az 1-9 számbillentyűk segítségével adhatja meg.

        A kísérlet gyakorló blokkal kezdődik, ezt követi az éles feladat.

        Nyomjon le egy tetszőleges billentyűt a gyakorlás indításához!
    KeyboardComponent welcome_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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  Routine end
    TextComponent goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        A kísérlet véget ért.

        Köszönjük, hogy segítette munkánkat!
  Routine feedback
    CodeComponent genFeedback
      Code Type = Auto->JS
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      Begin Routine:
        if resp.corr:
            feedbackStr = 'Helyes válasz!'
        else:
            feedbackStr = 'Helytelen válasz!'
    TextComponent feedbackText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedbackStr
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  Routine expstart
    TextComponent expStart
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.2
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      text:
        A gyakorlás véget ért.

        A következő, éles kísérletben már nem kap visszajelzést válaszai helyességéről.

        Nyomjon le egy tetszőleges billentyűt a kísérlet indításához!
    KeyboardComponent key_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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Flow
  Routine instructions
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = practice_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('dotCount', 4), ('duration', 2)]),
      OrderedDict([('dotCount', 5), ('duration', 2)]),
      OrderedDict([('dotCount', 6), ('duration', 2)]),
      OrderedDict([('dotCount', 7), ('duration', 2)])]
    Routine trial
    Routine response
    Routine feedback
  LoopTerminator practice
  Routine expstart
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_conditions.xlsx
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('dotCount', 4), ('duration', 1)]),
      OrderedDict([('dotCount', 5), ('duration', 1)]),
      OrderedDict([('dotCount', 6), ('duration', 1)]),
      OrderedDict([('dotCount', 7), ('duration', 1)])]
    Routine trial
    Routine response
  LoopTerminator trials
  Routine end
